# Generated by Configurator on Mon Jan 11 18:18:28 EST 2021

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Cam,DemoCamera,DCam
Device,Z_Stage,DemoCamera,DStage
Device,XY_Stage,DemoCamera,DXYStage

# Pre-init settings for devices
Property,Cam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Cam,DHub
Parent,Z_Stage,DHub
Parent,XY_Stage,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,Z_Stage,0

# Roles
Property,Core,Camera,Cam
Property,Core,Focus,Z_Stage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel
# Preset: FITC
ConfigGroup,Channel,FITC,Cam,Mode,Artificial Waves

# Preset: DAPI
ConfigGroup,Channel,DAPI,Cam,Mode,Color Test Pattern

# Preset: Cy3
ConfigGroup,Channel,Cy3,Cam,Mode,Noise


# Group: System
# Preset: Startup



# PixelSize settings

